PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['participant_number'], expName, expInfo['date'])
  Experiment info = {'participant_number': '', 'gender': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['TotalSentence.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = OnlineDemo_english_instruction
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine end
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    TextComponent endword
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      wrapWidth = 2
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      text:
        That\'s the end of experiment.
        This program would close automatically after 2s.
  Routine start
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    TextComponent text1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        In this experiment, based on the given sentence sequence,
        please type the word that is expected to appear next.
        Example:
        提示された語列1：「今日は」
        → タイプ例：「天気が」

        提示された語列2：「今日は天気が」
        → タイプ例：「いいです」

        There are no correct or incorrect answers for the input words.
        Please input the word that comes to mind based on your first impression.
        The length of the content is not limited.
        After typing the single word, please press the Enter/Return key.
        This experiment consists of a total of 60 sentences.
        In a quiet environment, please conduct the experiment
        independently without seeking help from others.
        When you are ready, press the SPACE to start the experiment.
    KeyboardComponent key_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Loop
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        firstKeyClock = core.Clock()
        hasFirstKey = False
      Begin Routine:
        cur_word_idx = 0
        endClock = core.Clock()
        need_end=0
        word_onset = 0
        participant_num = int(expInfo['participant_number'])
        if participant_num % 4 == 1 or participant_num % 4 == 0:
            words = sentencetrial.thisTrial['sentence1'].split()
        else:
            words = sentencetrial.thisTrial['sentence2'].split()
      Each Frame:
        shown = ' '.join(words[:cur_word_idx+1])
        shown_stim.text = shown
        next_phrase = ' '.join(words[cur_word_idx+1:])
        tmp.text = next_phrase
        shown_stim.draw()
        continueRoutine = True
        if cur_word_idx == 0:
            word_onset = globalClock.getTime()
        if cur_word_idx < len(words)-1 :
            #set underline_hint
            char_width_estimate = 0.044
            remaining_width = len(next_phrase) * char_width_estimate
            shown_width = len(shown) * char_width_estimate
            offset = cur_word_idx * 0.015
            start_x = -0.67 - offset
            x_center = start_x + shown_width + remaining_width/2 - 0.044
            shown_stim_center = start_x + shown_width/2
            shown_stim.pos = (shown_stim_center, 0.33)
            underline_hint.size = (remaining_width*3, 0)
            underline_hint.pos = (x_center, 0.3)

            keys = event.getKeys(keyList=['return'])
            response_instr.draw()
            underline_hint.draw()
            underline.draw()
            textbox.draw()
            continueRoutine = True
            if keys and 'return' in keys:
                if textbox.text != '':
                    #data collection
                    typed_text = textbox.getText() if hasattr(textbox, 'getText') else textbox.text
                    thisExp.addData('word_i', cur_word_idx)
                    thisExp.addData('word', words[cur_word_idx])
                    thisExp.addData('typed', typed_text)
                    thisExp.addData('RT', globalClock.getTime() - word_onset)
                    thisExp.nextEntry()

                    textbox.setText('')
                    cur_word_idx += 1
                    shown = ' '.join(words[:cur_word_idx+1])
                    word_onset = globalClock.getTime()
                    shown_stim.draw()
                    endClock.reset()
                    continueRoutine = True
        elif cur_word_idx >= len(words) - 1 :
            need_end=1
            end_instr.draw()
            #shown_stim_center = start_x + shown_width / 2 + len(words[cur_word_idx]) * 0.05
            shown_stim.pos = (0, 0.33)
            shown_stim.draw()
            continueRoutine = True
            if endClock.getTime() >= 2.0:
                continueRoutine = False
    TextComponent shown_stim
      letterHeight = 0.044
      pos = (-0.8, 0.37)
      startVal [condition] = 0.0
      wrapWidth = 2
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    TextComponent response_instr
      letterHeight = 0.044
      pos = (-0.3, -0.185)
      startVal [condition] = 0.0
      stopVal [condition] = $need_end
      text = Type the next words:
      wrapWidth = 2
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    TextComponent end_instr
      letterHeight = 0.05
      pos = (0, -0.185)
      startVal [condition] = $need_end
      stopVal [duration (s)] = 1.0
      wrapWidth = 2
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      text:
        That\'s the end of sentence
        Next sentence would appear after 2s
    TextComponent tmp
      letterHeight = 0.044
      pos = (-0.8, 0)
      startVal [condition] = 0.0
      wrapWidth = 2
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    PolygonComponent underline
      fillColor = white
      pos = (0.2, -0.222)
      shape = line
      size = (0.4, 0)
      startVal [condition] = 0.0
      stopVal [condition] = $need_end
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    PolygonComponent underline_hint
      fillColor = white
      pos = (0, 0.3)
      shape = line
      size = (0.3, 0.0)
      startVal [condition] = 0.0
      stopVal [condition] = $need_end
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    TextboxComponent textbox
      bold = False
      editable = True
      font = SimSun
      letterHeight = 0.044
      pos = (0.2, -0.185)
      size = (0.5, 0.0556)
      stopVal [condition] = $need_end
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Flow
  Routine start
  LoopInitiator sentencetrial loopType="TrialHandler"
    conditionsFile = TotalSentence.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sentence1': '御朱印は 神社に 参拝した 証 として 受け取る ものです', 'sentence2': 'この 技術を 使い データを 可視 化し 防災情報を 迅速に 提供する'},
      {'sentence1': '気象庁は この 台風の 日本への 影響は ないと 発表しました', 'sentence2': 'その 道路の 渋滞状況は 色分けして 表示される ように なっています'}]
    LoopInitiator wordtrial loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Loop
    LoopTerminator wordtrial
  LoopTerminator sentencetrial
  Routine end
